WorkflowBuilder(Version=2.8.1)
GroupWorkflow Behavior
    GroupWorkflow InitializeSubjects
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateDigitalInputStatePayload(DigitalInputState=None))
        -> IgnoreElements
        -> BehaviorSubject BehaviorCommands

        BooleanProperty(Value=false) => #3
        DoubleProperty(Value=0) => #4
        #3, #4 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> BehaviorSubject LeftPoke
        -> BehaviorSubject CenterPoke
        -> BehaviorSubject RightPoke

    SubscribeSubject BehaviorCommands
    -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
    -> BehaviorSubject BehaviorMessages

    SubscribeSubject BehaviorMessages => #4
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
    -> MemberSelector(Selector=Seconds)
    -> PublishSubject Timestamp
    #4 -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #8
    -> GroupWorkflow FilterPokeEvents
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=Port)) => #2
        #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
          Expression: !Convert.ToBoolean(it)
        #0 -> MemberSelector(Selector=Seconds) => #5
        #4, #5 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped => #7
        ExternalizedMapping(Subject) => #8
        #7, #8 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Name(DisplayName=Subject))
            -> SubscribeSubject LeftPoke
            -> MemberSelector(Selector=Value) => #4
            #1, #4 -> WithLatestFrom
            -> NotEqual
            -> WorkflowOutput
        -> WorkflowOutput
    -> MulticastSubject LeftPoke
    #8 -> GroupWorkflow FilterPokeEvents
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=Port)) => #2
        #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
          Expression: Convert.ToBoolean(it)
        #0 -> MemberSelector(Selector=Seconds) => #5
        #4, #5 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped => #7
        ExternalizedMapping(Subject) => #8
        #7, #8 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Name(DisplayName=Subject))
            -> SubscribeSubject CenterPoke
            -> MemberSelector(Selector=Value) => #4
            #1, #4 -> WithLatestFrom
            -> NotEqual
            -> WorkflowOutput
        -> WorkflowOutput
    -> MulticastSubject CenterPoke
    #8 -> GroupWorkflow FilterPokeEvents
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=Port)) => #2
        #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
          Expression: !Convert.ToBoolean(it)
        #0 -> MemberSelector(Selector=Seconds) => #5
        #4, #5 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped => #7
        ExternalizedMapping(Subject) => #8
        #7, #8 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Name(DisplayName=Subject))
            -> SubscribeSubject RightPoke
            -> MemberSelector(Selector=Value) => #4
            #1, #4 -> WithLatestFrom
            -> NotEqual
            -> WorkflowOutput
        -> WorkflowOutput
    -> MulticastSubject RightPoke

GroupWorkflow SoundCard
    GroupWorkflow InitializeSubjects
        Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=2))
        -> IgnoreElements
        -> BehaviorSubject SoundCardCommands

        IntProperty(Value=2)
        -> BehaviorSubject SoundIndex

        IntProperty(Value=31)
        -> BehaviorSubject LastSoundIndex

        IntProperty(Value=0)
        -> Disable IgnoreElements
        -> BehaviorSubject LeftAttenuation

        IntProperty(Value=10)
        -> Disable IgnoreElements
        -> BehaviorSubject RightAttenuation

    Disable SubscribeSubject SoundCardCommands
    -> Disable Harp.SoundCard.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM4)

    Disable SubscribeSubject SoundIndex => #3
    -> Disable PropertyMapping(SoundIndexDI0) => #4
    #3, #4 -> Disable Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateSoundIndexDI0Payload(SoundIndexDI0=2))
    -> Disable MulticastSubject SoundCardCommands

    Disable SubscribeSubject LeftAttenuation
    -> Disable Multiply(Operand=DoubleProperty(Value=10)) => #8
    -> Disable PropertyMapping(AttenuationLeft) => #9
    #8, #9 -> Disable Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=230))
    -> Disable MulticastSubject SoundCardCommands

    Disable SubscribeSubject RightAttenuation
    -> Disable Multiply(Operand=DoubleProperty(Value=10)) => #13
    -> Disable PropertyMapping(AttenuationRight) => #14
    #13, #14 -> Disable Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationRightPayload(AttenuationRight=170))
    -> Disable MulticastSubject SoundCardCommands

GroupWorkflow Distributions
    Bonsai.Numerics.CreateRandom(Seed=nil) => #0
    SubscribeSubject ExpFTMean
    -> Bonsai.Dsp.Pow(Power=-1)
    -> PropertyMapping(Rate) => #3
    #0, #3 -> Bonsai.Numerics.Distributions.CreateExponential(Rate=13.333333333333334)
    -> BehaviorSubject FTDistribution

    Bonsai.Numerics.CreateRandom(Seed=nil) => #6
    SubscribeSubject ILDs
    -> MemberSelector(Selector=Length)
    -> Subtract(Operand=IntProperty(Value=1))
    -> PropertyMapping(Upper) => #10
    #6, #10 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=9)
    -> BehaviorSubject ILDDistribution

    IntProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject NewABLRequest

    SubscribeSubject NewABLRequest => #16
    Bonsai.Numerics.CreateRandom(Seed=nil) => #17
    SubscribeSubject ABLList
    -> MemberSelector(Selector=Length)
    -> Subtract(Operand=IntProperty(Value=1))
    -> PropertyMapping(Upper) => #21
    #17, #21 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=2) => #22
    #16, #22 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Numerics.Distributions.Sample
    -> BehaviorSubject ABLDistribution

    SubscribeSubject ILDs
    -> SLTFunctionality.ShuffleArray
    -> MulticastSubject ShuffledILDs

    SubscribeSubject ILDSteps => #30
    -> PropertyMapping(NumSteps) => #31
    SubscribeSubject ILDStepSize
    -> PropertyMapping(StepSize) => #33
    SubscribeSubject UseLog
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToBoolean(it)
    -> PropertyMapping(UseLog) => #36
    SubscribeSubject ILDStepSize
    -> PropertyMapping(LogBase) => #38
    #30, #31, #33, #36, #38 -> SLTFunctionality.GenerateILDArray(NumSteps=5, StepSize=2, UseLog=false, LogBase=2)
    -> BehaviorSubject ILDs

GroupWorkflow InputParameters
    GroupWorkflow Training
        DoubleProperty(Value=16)
        -> BehaviorSubject TrainingLevel

        SubscribeSubject TrainingLevel => #2
        -> Subtract(Operand=DoubleProperty(Value=1))
        -> PropertyMapping(RowNumber) => #4
        #2, #4 -> SLTFunctionality.TrainingCSV(FileName=input_files\training_settings.csv, RowNumber=15)
        -> BehaviorSubject TrainingConfigurations

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=TrialsPerBlock)
        -> BehaviorSubject TrialsPerBlock

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=FixedABL)
        -> BehaviorSubject FixedABL

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=DifferentABLs)
        -> BehaviorSubject DifferentABLs

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=ABLBlock)
        -> BehaviorSubject ABLBlock

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=ILDStepSize)
        -> BehaviorSubject ILDStepSize

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=ILDSteps)
        -> BehaviorSubject ILDSteps

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=UseLog)
        -> BehaviorSubject UseLog

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=LogBase)
        -> BehaviorSubject LogBase

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=IntendedITI)
        -> BehaviorSubject IntendedITI

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=ITIReset)
        -> BehaviorSubject ITIReset

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=MaxWait)
        -> BehaviorSubject MaxWait

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=UseRT)
        -> BehaviorSubject UseRT

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=UseMaxRT)
        -> BehaviorSubject UseMaxRT

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=MaxMT)
        -> BehaviorSubject MaxMT

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=AbortPenalty)
        -> BehaviorSubject AbortPenalty

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=IncorrectPenalty)
        -> BehaviorSubject IncorrectPenalty

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=FixationAbortPenalty)
        -> BehaviorSubject FixationAbortPenalty

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=UsePerformance)
        -> BehaviorSubject UsePerformance

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=CriticalPerformance)
        -> BehaviorSubject CriticalPerformance

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=RepeatError)
        -> BehaviorSubject RepeatError

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=RepeatAbort)
        -> BehaviorSubject RepeatAbort

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=Speakers)
        -> BehaviorSubject Speakers

    GroupWorkflow AnimalSpecific
        SLTFunctionality.AnimalSpecificJSON(FilePath=input_files\animal_settings.json)
        -> BehaviorSubject AnimalSpecificConfigurations

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=Animal)
        -> BehaviorSubject Animal

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=Box)
        -> BehaviorSubject Box

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=Session)
        -> BehaviorSubject Session

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=SessionType)
        -> BehaviorSubject SessionType

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=SessionDuration)
        -> BehaviorSubject SessionDuration

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=StartingTrialNumber)
        -> Subtract(Operand=IntProperty(Value=1))
        -> BehaviorSubject Trial

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=StartingBlockNumber)
        -> BehaviorSubject Block

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=ABLList)
        -> BehaviorSubject ABLList

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=CycleILD)
        -> BehaviorSubject CycleILD

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=Bias)
        -> BehaviorSubject Bias

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=MinFT)
        -> BehaviorSubject BaseFT

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=FTDelta)
        -> BehaviorSubject FTDelta

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=FTTarget)
        -> BehaviorSubject FTTarget

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=ExpFTMean)
        -> BehaviorSubject ExpFTMean

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=MinRT)
        -> BehaviorSubject BaseRT

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=RTDelta)
        -> BehaviorSubject RTDelta

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=RTTarget)
        -> BehaviorSubject RTTarget

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=MaxRT)
        -> BehaviorSubject MaxRT

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=MinMT)
        -> BehaviorSubject MinMT

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=MinLNP)
        -> BehaviorSubject IntendedLNP

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=LNPDelta)
        -> BehaviorSubject LNPDelta

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=LNPTarget)
        -> BehaviorSubject LNPTarget

    GroupWorkflow OutputFile
        DoubleProperty(Value=0)
        -> ToArray
        -> IgnoreElements
        -> BehaviorSubject CSV

        SubscribeSubject CSV
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
                it[0] as Animal,
                it[1] as Session,
                it[2] as SessionType,
                it[3] as Trial,
                it[4] as Block,
                it[5] as TrialsPerBlock,
                it[6] as TrainingLevel,
                it[7] as ABL,
                it[8] as ILD,
                it[9] as Bias,
                it[10] as LeftAmp,
                it[11] as RightAmp,
                it[12] as WaveformL,
                it[13] as WaveformR,
                it[14] as TrialStart,
                it[15] as TrialEnd,
                it[16] as TrialDuration,
                it[17] as IntendedITI,
                it[18] as ITIStart,
                it[19] as ITIEnd,
                it[20] as TimedITI,
                it[21] as MaxWait,
                it[22] as TimeToCNP,
                it[23] as BaseFix,
                it[24] as ExpFixMean,
                it[25] as IntendedFix,
                it[26] as TimedFix,
                it[27] as BaseRT,
                it[28] as MaxRT,
                it[29] as TimedRT,
                it[30] as MaxMT,
                it[31] as TimedMT,
                it[32] as IntendedLNP,
                it[33] as TimedLNP,
                it[34] as ResponsePoke,
                it[35] as Success,
                it[36] as AbortEvent,
                it[37] as RepeatTrial,
                it[38] as BlockPerformance,
                it[39] as BlockAbortRatio,
                it[40] as LEDTrial,
                it[41] as TimedLED,
                it[42] as LEDPowerL,
                it[43] as LEDPowerR,
                it[44] as Box
            )
        -> Bonsai.IO.CsvWriter(FileName=output_files\experiment.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)

        DoubleProperty(Value=0)
        -> BehaviorSubject ABL

        DoubleProperty(Value=0)
        -> BehaviorSubject ILD

        DoubleProperty(Value=17)
        -> BehaviorSubject LeftAmp

        DoubleProperty(Value=18)
        -> BehaviorSubject RightAmp

        IntProperty(Value=0)
        -> BehaviorSubject WaveformL

        IntProperty(Value=0)
        -> BehaviorSubject WaveformR

        DoubleProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject TrialStart

        DoubleProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject TrialEnd

        DoubleProperty(Value=0)
        -> BehaviorSubject TimeToCNP

        DoubleProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject IntendedFT

        DoubleProperty(Value=0)
        -> BehaviorSubject TimedFT

        DoubleProperty(Value=0)
        -> BehaviorSubject TimedRT

        DoubleProperty(Value=0)
        -> BehaviorSubject TimedMT

        DoubleProperty(Value=0)
        -> BehaviorSubject TimedLNP

        IntProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject ResponsePoke

        IntProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject Success

        IntProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject AbortEvent

        IntProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject RepeatTrial

        DoubleProperty(Value=0)
        -> BehaviorSubject BlockPerformance

        DoubleProperty(Value=0)
        -> BehaviorSubject BlockAbortRatio

        DoubleProperty(Value=13)
        -> BehaviorSubject LEDTrial

        DoubleProperty(Value=14)
        -> BehaviorSubject TimedLED

        DoubleProperty(Value=15)
        -> BehaviorSubject LEDPowerL

        DoubleProperty(Value=16)
        -> BehaviorSubject LEDPowerR

    GroupWorkflow AuxiliaryParameters
        DoubleProperty(Value=0)
        -> BehaviorSubject ILDIndex

        DoubleProperty(Value=0)
        -> BehaviorSubject ITIStart

        DoubleProperty(Value=0)
        -> BehaviorSubject ITIEnd

        DoubleProperty(Value=0)
        -> BehaviorSubject TrialsCompleted

        DoubleProperty(Value=0)
        -> BehaviorSubject TrialsAborted

        DoubleProperty(Value=0)
        -> BehaviorSubject RightAnswers

        IntProperty(Value=1)
        -> BehaviorSubject BlockTrial

        DoubleProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject LNPStart

        DoubleProperty(Value=0)
        -> ToArray
        -> IgnoreElements
        -> BehaviorSubject ShuffledILDs

BooleanProperty(Value=true)
-> SelectMany Inter-TrialInterval => #5
    SubscribeSubject CenterPoke
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        SubscribeSubject ITIReset
        -> NotEqual(Operand=IntProperty(Value=0)) => #3
        #1, #3 -> CombineLatest
        -> LogicalAnd
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #2
    WorkflowInput Source1
    -> GroupWorkflow TimestampEvent
        WorkflowInput Source1 => #0
        SubscribeSubject Timestamp => #1
        #0, #1 -> CombineLatest
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject ITIStart => #6
    SubscribeSubject IntendedITI
    -> Multiply(Operand=DoubleProperty(Value=10000000))
    -> PropertyMapping(DueTime) => #9
    #6, #9 -> Delay(DueTime=PT1S)
    -> GroupWorkflow TimestampEvent
        WorkflowInput Source1 => #0
        SubscribeSubject Timestamp => #1
        #0, #1 -> CombineLatest
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject ITIEnd
    -> BooleanProperty(Value=true) => #14
    #2, #14 -> Merge => #15
    IntProperty(Value=1) => #16
    #15, #16 -> Zip
    -> Take(Count=1)
    -> WorkflowOutput
    #14 -> Disable GroupWorkflow SelectSound
        SubscribeSubject LastSoundIndex
        -> Take(Count=1) => #1
        -> Condition
            WorkflowInput Source1
            -> LessThan(Operand=IntProperty(Value=31))
            -> WorkflowOutput
        -> Add(Operand=IntProperty(Value=1)) => #3
        #1 -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=31))
            -> WorkflowOutput
        -> IntProperty(Value=2) => #5
        #3, #5 -> Merge
        -> MulticastSubject SoundIndex
        -> MulticastSubject LastSoundIndex
        -> WorkflowOutput

        WorkflowInput Source1
    #14 -> GroupWorkflow RandomizeLouderSpeaker
        SubscribeSubject ABLBlock => #0
        WorkflowInput Source1 => #1
        #0, #1 -> SubscribeWhen => #2
        SubscribeSubject BlockTrial => #3
        #3, #1 -> SubscribeWhen => #4
        #2, #4 -> Zip => #5
        -> Condition => #6
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #5 -> Condition => #7
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1)
            -> NotEqual(Operand=DoubleProperty(Value=0)) => #2
            #0 -> MemberSelector(Selector=Item2)
            -> Equal(Operand=IntProperty(Value=1)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        #6, #7 -> Merge
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject NewABLRequest
        SubscribeSubject ABLList => #11
        SubscribeSubject ABLDistribution
        -> PropertyMapping(Value) => #13
        #11, #13 -> Index(Operand=IntProperty(Value=1)) => #14
        #1 -> BooleanProperty(Value=false) => #15
        -> Condition => #16
            SubscribeSubject DifferentABLs
            -> NotEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #14, #16 -> SubscribeWhen => #17
        SubscribeSubject FixedABL => #18
        #15 -> Condition => #19
            SubscribeSubject DifferentABLs
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #18, #19 -> SubscribeWhen => #20
        #17, #20 -> Merge
        -> MulticastSubject ABL => #22
        SubscribeSubject ILDs => #23
        #23, #1 -> SubscribeWhen => #24
        SubscribeSubject ILDDistribution
        -> Bonsai.Numerics.Distributions.Sample
        -> PropertyMapping(Value) => #27
        #24, #27 -> Index(Operand=IntProperty(Value=6))
        -> Condition => #29
            SubscribeSubject CycleILD
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject ShuffledILDs => #30
        #30, #1 -> SubscribeWhen => #31
        SubscribeSubject ILDIndex => #32
        #32, #1 -> SubscribeWhen
        -> Take(Count=1) => #34
        -> PropertyMapping(Value) => #35
        #31, #35 -> Index(Operand=IntProperty(Value=2))
        -> Condition => #37
            SubscribeSubject CycleILD
            -> NotEqual(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        #29, #37 -> Merge
        -> MulticastSubject ILD
        -> Divide(Operand=DoubleProperty(Value=2)) => #40
        #22, #40 -> Disable Zip
        -> Disable Condition => #42
            SubscribeSubject RepeatTrial
            -> Take(Count=1) => #1
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
            #1 -> DoubleProperty(Value=0)
            -> MulticastSubject RepeatTrial
        -> Disable Subtract(Operand=DoubleProperty(Value=0))
        -> Disable MulticastSubject LeftAttenuation
        #42 -> Disable Add(Operand=DoubleProperty(Value=0))
        -> Disable MulticastSubject RightAttenuation
        SubscribeSubject ILDs
        -> Take(Count=1) => #48
        #34 -> Add(Operand=DoubleProperty(Value=1)) => #49
        #31 -> MemberSelector(Selector=Length) => #50
        #49, #50 -> Zip => #51
        -> Condition => #52
            WorkflowInput Source1
            -> Equal
            -> WorkflowOutput
        #48, #52 -> SubscribeWhen
        -> MulticastSubject ILDs
        -> DoubleProperty(Value=0)
        -> MulticastSubject ILDIndex
        #51 -> Condition
            WorkflowInput Source1
            -> NotEqual
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject ILDIndex
-> Condition
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> WorkflowOutput
-> SelectMany StartTrial => #7
    SubscribeSubject CenterPoke
    -> Condition => #1
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds) => #2
    WorkflowInput Source1
    -> GroupWorkflow TimestampEvent
        WorkflowInput Source1 => #0
        SubscribeSubject Timestamp => #1
        #0, #1 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject TrialStart => #6
    #2, #6 -> Zip
    -> Subtract
    -> MulticastSubject TimeToCNP
    SubscribeSubject MaxWait
    -> Multiply(Operand=DoubleProperty(Value=10000000))
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT2S, Period=PT0S)
    -> BooleanProperty(Value=false)
    -> GroupWorkflow TimestampEvent => #15
        WorkflowInput Source1 => #0
        SubscribeSubject Timestamp => #1
        #0, #1 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    #15, #1 -> Merge
    -> Take(Count=1)
    -> MemberSelector(Selector=Value) => #18
    IntProperty(Value=2) => #19
    #18, #19 -> Zip
    -> WorkflowOutput
-> Condition
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> WorkflowOutput
-> SelectMany FixationTime => #9
    SubscribeSubject CenterPoke => #0
    -> Condition => #1
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds) => #2
    #0 -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds) => #4
    #2, #4 -> Zip
    -> Subtract
    -> MulticastSubject TimedFT
    SubscribeSubject BaseFT => #8
    SubscribeSubject FTDistribution
    -> Bonsai.Numerics.Distributions.Sample => #10
    #8, #10 -> Zip
    -> Add
    -> MulticastSubject IntendedFT
    -> Multiply(Operand=DoubleProperty(Value=10000000))
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT0.0605553S, Period=PT0S)
    -> BooleanProperty(Value=true)
    -> GroupWorkflow TimestampEvent => #18
        WorkflowInput Source1 => #0
        SubscribeSubject Timestamp => #1
        #0, #1 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    #1, #18 -> Merge
    -> Take(Count=1)
    -> MemberSelector(Selector=Value) => #21
    IntProperty(Value=3) => #22
    #21, #22 -> Zip
    -> WorkflowOutput
-> Condition
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> WorkflowOutput
-> SelectMany Stimulus => #11
    SubscribeSubject CenterPoke
    -> Condition => #1
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds) => #2
    WorkflowInput Source1
    -> GroupWorkflow PlaySound
        WorkflowInput Source1
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO0))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO0))
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput
    -> GroupWorkflow TimestampEvent
        WorkflowInput Source1 => #0
        SubscribeSubject Timestamp => #1
        #0, #1 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds)
    -> BehaviorSubject RTStart => #7
    #2, #7 -> Zip
    -> Subtract
    -> MulticastSubject TimedRT
    SubscribeSubject CenterPoke
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds) => #13
    #2, #13 -> Zip
    -> Subtract
    -> MulticastSubject TimedFT
    #1 -> BooleanProperty(Value=true) => #17
    #17, #2 -> Zip
    -> Bonsai.Harp.CreateTimestamped => #19
    SubscribeSubject MaxRT
    -> Multiply(Operand=DoubleProperty(Value=10000000))
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT10S, Period=PT0S)
    -> Condition
        SubscribeSubject UseMaxRT
        -> NotEqual(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> BooleanProperty(Value=false)
    -> GroupWorkflow TimestampEvent => #26
        WorkflowInput Source1 => #0
        SubscribeSubject Timestamp => #1
        #0, #1 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    #19, #26 -> Merge => #27
    -> Condition
        SubscribeSubject UseRT
        -> NotEqual(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> IntProperty(Value=32)
    -> MulticastSubject SoundIndex
    -> GroupWorkflow PlaySound
        WorkflowInput Source1
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO0))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO0))
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput
    #27 -> Take(Count=1) => #32
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Seconds) => #1
        SubscribeSubject RTStart => #2
        #1, #2 -> Zip
        -> Subtract => #4
        SubscribeSubject BaseRT => #5
        #4, #5 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> MemberSelector(Selector=Value) => #34
    #32 -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Seconds) => #1
        SubscribeSubject RTStart => #2
        #1, #2 -> Zip
        -> Subtract => #4
        SubscribeSubject BaseRT => #5
        #4, #5 -> Zip
        -> LessThan
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #36
    #34, #36 -> Merge => #37
    IntProperty(Value=4) => #38
    #37, #38 -> Zip
    -> WorkflowOutput
-> Condition
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> WorkflowOutput
-> SelectMany Choice => #13
    SubscribeSubject LeftPoke
    -> Condition => #1
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    -> IntProperty(Value=-1) => #2
    SubscribeSubject RightPoke
    -> Condition => #4
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    -> IntProperty(Value=1) => #5
    #2, #5 -> Merge
    -> MulticastSubject ResponsePoke
    -> Condition
        SubscribeSubject UseRT
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> IntProperty(Value=32)
    -> MulticastSubject SoundIndex
    -> GroupWorkflow PlaySound
        WorkflowInput Source1
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO0))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO0))
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput
    #1 -> MemberSelector(Selector=Seconds) => #12
    #4 -> MemberSelector(Selector=Seconds) => #13
    #12, #13 -> Merge
    -> MulticastSubject LNPStart => #15
    SubscribeSubject CenterPoke
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds) => #18
    #15, #18 -> Zip
    -> Subtract
    -> MulticastSubject TimedMT => #21
    -> Condition
        WorkflowInput Source1 => #0
        SubscribeSubject MinMT => #1
        #0, #1 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #23
    #21 -> Condition
        WorkflowInput Source1 => #0
        SubscribeSubject MinMT => #1
        #0, #1 -> Zip
        -> LessThan
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #25
    SubscribeSubject MaxMT
    -> Multiply(Operand=DoubleProperty(Value=10000000))
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT3S, Period=PT0S)
    -> BooleanProperty(Value=false) => #30
    #23, #25, #30 -> Merge
    -> Take(Count=1) => #32
    IntProperty(Value=5) => #33
    #32, #33 -> Zip
    -> WorkflowOutput
-> Condition
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> WorkflowOutput
-> SelectMany Reward => #15
    GroupWorkflow UpdateSubjects
        IntProperty(Value=0)
        -> MulticastSubject AbortEvent

        DoubleProperty(Value=0) => #2
        SubscribeSubject Correct => #3
        #2, #3 -> SubscribeWhen
        -> MulticastSubject RepeatTrial

        SubscribeSubject RepeatError => #6
        SubscribeSubject Incorrect => #7
        #6, #7 -> SubscribeWhen
        -> MulticastSubject RepeatTrial

        SubscribeSubject TrialsAborted => #10
        SubscribeSubject BlockTrial => #11
        #10, #11 -> Zip
        -> Divide
        -> MulticastSubject BlockAbortRatio

        SubscribeSubject BaseFT => #15
        SubscribeSubject FTDelta => #16
        #15, #16 -> Zip
        -> Add => #18
        -> Condition => #19
            WorkflowInput Source1 => #0
            SubscribeSubject FTTarget => #1
            #0, #1 -> Zip
            -> LessThanOrEqual
            -> WorkflowOutput
        SubscribeSubject FTTarget => #20
        #18 -> Condition => #21
            WorkflowInput Source1 => #0
            SubscribeSubject FTTarget => #1
            #0, #1 -> Zip
            -> LessThanOrEqual
            -> LogicalAnd(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #20, #21 -> SubscribeWhen => #22
        #19, #22 -> Merge
        -> MulticastSubject BaseFT

        SubscribeSubject BaseRT => #25
        SubscribeSubject RTDelta => #26
        #25, #26 -> Zip
        -> Add => #28
        -> Condition => #29
            WorkflowInput Source1 => #0
            SubscribeSubject RTTarget => #1
            #0, #1 -> Zip
            -> LessThanOrEqual
            -> WorkflowOutput
        SubscribeSubject RTTarget => #30
        #28 -> Condition => #31
            WorkflowInput Source1 => #0
            SubscribeSubject RTTarget => #1
            #0, #1 -> Zip
            -> LessThanOrEqual
            -> LogicalAnd(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #30, #31 -> SubscribeWhen => #32
        #29, #32 -> Merge
        -> MulticastSubject BaseRT

        SubscribeSubject IntendedLNP => #35
        SubscribeSubject LNPDelta => #36
        #35, #36 -> Zip
        -> Add => #38
        -> Condition => #39
            WorkflowInput Source1 => #0
            SubscribeSubject LNPTarget => #1
            #0, #1 -> Zip
            -> LessThanOrEqual
            -> WorkflowOutput
        SubscribeSubject LNPTarget => #40
        #38 -> Condition => #41
            WorkflowInput Source1 => #0
            SubscribeSubject LNPTarget => #1
            #0, #1 -> Zip
            -> LessThanOrEqual
            -> LogicalAnd(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #40, #41 -> SubscribeWhen => #42
        #39, #42 -> Merge
        -> MulticastSubject IntendedLNP

        SubscribeSubject RightAnswers => #45
        SubscribeSubject Correct => #46
        #45, #46 -> SubscribeWhen
        -> Add(Operand=DoubleProperty(Value=1)) => #48
        SubscribeSubject RightAnswers => #49
        SubscribeSubject Incorrect => #50
        #49, #50 -> SubscribeWhen => #51
        #48, #51 -> Merge
        -> Take(Count=1)
        -> MulticastSubject RightAnswers => #54
        SubscribeSubject TrialsCompleted
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject TrialsCompleted => #58
        #54, #58 -> Zip
        -> Divide
        -> MulticastSubject BlockPerformance

    GroupWorkflow NewBlock
        SubscribeSubject TrainingLevel
        -> Take(Count=1) => #1
        SubscribeSubject Block
        -> Take(Count=1) => #3
        -> Condition
            SubscribeSubject TrialsCompleted => #0
            SubscribeSubject TrialsPerBlock => #1
            #0, #1 -> Zip
            -> Equal
            -> WorkflowOutput
        -> Add(Operand=DoubleProperty(Value=0))
        -> MulticastSubject Block => #6
        -> Condition => #7
            SubscribeSubject UsePerformance
            -> Equal(Operand=DoubleProperty(Value=0)) => #1
            SubscribeSubject UsePerformance
            -> Equal(Operand=DoubleProperty(Value=1)) => #3
            SubscribeSubject BlockPerformance => #4
            SubscribeSubject CriticalPerformance => #5
            #4, #5 -> Zip
            -> GreaterThanOrEqual => #7
            #3, #7 -> Zip
            -> LogicalAnd => #9
            #1, #9 -> Zip
            -> LogicalOr
            -> WorkflowOutput
        #1, #7 -> SubscribeWhen
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject TrainingLevel => #10
        #6 -> Condition
            SubscribeSubject UsePerformance
            -> Equal(Operand=DoubleProperty(Value=0)) => #1
            SubscribeSubject UsePerformance
            -> Equal(Operand=DoubleProperty(Value=1)) => #3
            SubscribeSubject BlockPerformance => #4
            SubscribeSubject CriticalPerformance => #5
            #4, #5 -> Zip
            -> GreaterThanOrEqual => #7
            #3, #7 -> Zip
            -> LogicalAnd => #9
            #1, #9 -> Zip
            -> LogicalOr
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #12
        #10, #12 -> Merge
        -> DoubleProperty(Value=0)
        -> MulticastSubject TrialsCompleted
        -> MulticastSubject TrialsAborted
        -> MulticastSubject RightAnswers
        -> MulticastSubject BlockPerformance
        -> MulticastSubject BlockAbortRatio
        -> MulticastSubject BlockTrial
        SubscribeSubject BlockTrial
        -> Take(Count=1) => #22
        #3 -> Condition => #23
            SubscribeSubject TrialsCompleted => #0
            SubscribeSubject TrialsPerBlock => #1
            #0, #1 -> Zip
            -> NotEqual
            -> WorkflowOutput
        #22, #23 -> SubscribeWhen
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject BlockTrial

    GroupWorkflow UpdateTrial
        SubscribeSubject Trial
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject Trial

    SubscribeSubject ResponsePoke => #3
    SubscribeSubject RightAttenuation => #4
    SubscribeSubject LeftAttenuation => #5
    #4, #5 -> Zip
    -> Subtract => #7
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> IntProperty(Value=1) => #9
    #7 -> Condition
        WorkflowInput Source1
        -> LessThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> IntProperty(Value=-1) => #11
    #9, #11 -> Merge => #12
    #3, #12 -> WithLatestFrom
    -> Equal => #14
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BehaviorSubject Correct => #16
    -> Condition
        SubscribeSubject CenterPoke
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> MemberSelector(Selector=Seconds) => #2
        SubscribeSubject LNPStart => #3
        #2, #3 -> Zip
        -> Subtract
        -> MulticastSubject TimedLNP => #6
        SubscribeSubject IntendedLNP => #7
        #6, #7 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> StringProperty(Value="Water for everyone")
    #16 -> IntProperty(Value=1) => #19
    #14 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> BehaviorSubject Incorrect => #21
    SubscribeSubject IncorrectPenalty
    -> Multiply(Operand=IntProperty(Value=10000000))
    -> PropertyMapping(DueTime) => #24
    #21, #24 -> Delay(DueTime=PT10S)
    -> IntProperty(Value=-1) => #26
    #19, #26 -> Merge
    -> MulticastSubject Success
    -> GroupWorkflow TimestampEvent
        WorkflowInput Source1 => #0
        SubscribeSubject Timestamp => #1
        #0, #1 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject TrialEnd
    -> BooleanProperty(Value=true) => #32
    IntProperty(Value=6) => #33
    #32, #33 -> Zip
    -> WorkflowOutput
#13 -> Condition => #16
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> Equal(Operand=BooleanProperty(Value=false))
    -> WorkflowOutput
#11 -> Condition => #17
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> Equal(Operand=BooleanProperty(Value=false))
    -> WorkflowOutput
#9 -> Condition => #18
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> Equal(Operand=BooleanProperty(Value=false))
    -> WorkflowOutput
#7 -> Condition => #19
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> Equal(Operand=BooleanProperty(Value=false))
    -> WorkflowOutput
#16, #17, #18, #19 -> Merge
-> SelectMany Abort => #21
    GroupWorkflow NewBlock
        SubscribeSubject TrainingLevel
        -> Take(Count=1) => #1
        SubscribeSubject Block
        -> Take(Count=1) => #3
        -> Condition
            SubscribeSubject TrialsCompleted => #0
            SubscribeSubject TrialsPerBlock => #1
            #0, #1 -> Zip
            -> Equal
            -> WorkflowOutput
        -> Add(Operand=DoubleProperty(Value=0))
        -> MulticastSubject Block => #6
        -> Condition => #7
            SubscribeSubject UsePerformance
            -> Equal(Operand=DoubleProperty(Value=0)) => #1
            SubscribeSubject UsePerformance
            -> Equal(Operand=DoubleProperty(Value=1)) => #3
            SubscribeSubject BlockPerformance => #4
            SubscribeSubject CriticalPerformance => #5
            #4, #5 -> Zip
            -> GreaterThanOrEqual => #7
            #3, #7 -> Zip
            -> LogicalAnd => #9
            #1, #9 -> Zip
            -> LogicalOr
            -> WorkflowOutput
        #1, #7 -> SubscribeWhen
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject TrainingLevel => #10
        #6 -> Condition
            SubscribeSubject UsePerformance
            -> Equal(Operand=DoubleProperty(Value=0)) => #1
            SubscribeSubject UsePerformance
            -> Equal(Operand=DoubleProperty(Value=1)) => #3
            SubscribeSubject BlockPerformance => #4
            SubscribeSubject CriticalPerformance => #5
            #4, #5 -> Zip
            -> GreaterThanOrEqual => #7
            #3, #7 -> Zip
            -> LogicalAnd => #9
            #1, #9 -> Zip
            -> LogicalOr
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #12
        #10, #12 -> Merge
        -> DoubleProperty(Value=0)
        -> MulticastSubject TrialsCompleted
        -> MulticastSubject TrialsAborted
        -> MulticastSubject RightAnswers
        -> MulticastSubject BlockPerformance
        -> MulticastSubject BlockAbortRatio
        -> DoubleProperty(Value=1)
        -> MulticastSubject BlockTrial
        SubscribeSubject BlockTrial
        -> Take(Count=1) => #23
        #3 -> Condition => #24
            SubscribeSubject TrialsCompleted => #0
            SubscribeSubject TrialsPerBlock => #1
            #0, #1 -> Zip
            -> NotEqual
            -> WorkflowOutput
        #23, #24 -> SubscribeWhen
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject BlockTrial

    GroupWorkflow UpdateTrial
        SubscribeSubject Trial
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject Trial

    SubscribeSubject FixationAbortPenalty => #2
    WorkflowInput Source1
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject AbortEvent => #5
    -> Condition => #6
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    #2, #6 -> SubscribeWhen => #7
    SubscribeSubject AbortPenalty => #8
    #5 -> Condition => #9
        WorkflowInput Source1
        -> NotEqual(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    #8, #9 -> SubscribeWhen => #10
    #7, #10 -> Merge
    -> Multiply(Operand=IntProperty(Value=10000000)) => #12
    -> PropertyMapping(DueTime) => #13
    #13, #12 -> Delay(DueTime=PT1S)
    -> IntProperty(Value=0)
    -> MulticastSubject Success
    -> GroupWorkflow TimestampEvent
        WorkflowInput Source1 => #0
        SubscribeSubject Timestamp => #1
        #0, #1 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject TrialEnd
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #21
    IntProperty(Value=7) => #22
    #21, #22 -> Zip
    -> WorkflowOutput
    #5 -> GroupWorkflow UpdateSubjects
        WorkflowInput Source1 => #0
        -> Equal(Operand=DoubleProperty(Value=2)) => #1
        -> DoubleProperty(Value=0)
        -> MulticastSubject TimeToCNP
        #1 -> DoubleProperty(Value=0)
        -> MulticastSubject IntendedFT
        #0 -> Equal(Operand=DoubleProperty(Value=4)) => #6
        #1, #6 -> Zip
        -> LogicalOr
        -> DoubleProperty(Value=0)
        -> MulticastSubject TimedFT
        #0 -> Equal(Operand=DoubleProperty(Value=3)) => #11
        #1, #11, #6 -> Zip
        -> LogicalOr
        -> DoubleProperty(Value=0)
        -> MulticastSubject TimedRT
        #0 -> Equal(Operand=DoubleProperty(Value=5)) => #16
        #1, #11, #6, #16 -> Zip
        -> LogicalOr => #18
        -> IntProperty(Value=0)
        -> MulticastSubject ResponsePoke
        #18 -> DoubleProperty(Value=0)
        -> MulticastSubject TimedMT

        DoubleProperty(Value=0)
        -> MulticastSubject TimedLNP

        SubscribeSubject RepeatAbort
        -> MulticastSubject RepeatTrial

        SubscribeSubject BlockPerformance
        -> Take(Count=1)
        -> MulticastSubject BlockPerformance

        SubscribeSubject TrialsAborted
        -> Take(Count=1)
        -> Add(Operand=DoubleProperty(Value=1))
        -> MulticastSubject TrialsAborted => #33
        SubscribeSubject BlockTrial => #34
        #33, #34 -> Zip
        -> Divide
        -> MulticastSubject BlockAbortRatio
#15, #21 -> Merge
-> SelectMany OutputFile => #23
    SubscribeSubject Box => #0
    SubscribeSubject LEDPowerR => #1
    SubscribeSubject LEDPowerL => #2
    SubscribeSubject TimedLED => #3
    SubscribeSubject LEDTrial => #4
    SubscribeSubject BlockAbortRatio => #5
    SubscribeSubject BlockPerformance => #6
    SubscribeSubject RepeatTrial => #7
    SubscribeSubject AbortEvent => #8
    SubscribeSubject Success => #9
    SubscribeSubject ResponsePoke => #10
    SubscribeSubject TimedLNP => #11
    SubscribeSubject IntendedLNP => #12
    SubscribeSubject TimedMT => #13
    SubscribeSubject MaxMT => #14
    SubscribeSubject TimedRT => #15
    SubscribeSubject MaxRT => #16
    SubscribeSubject BaseRT => #17
    SubscribeSubject TimedFT => #18
    SubscribeSubject IntendedFT => #19
    SubscribeSubject ExpFTMean => #20
    SubscribeSubject BaseFT => #21
    SubscribeSubject TimeToCNP => #22
    SubscribeSubject MaxWait => #23
    SubscribeSubject ITIEnd => #24
    SubscribeSubject ITIStart => #25
    #24, #25 -> Zip
    -> Subtract => #27
    SubscribeSubject ITIEnd => #28
    SubscribeSubject ITIStart => #29
    SubscribeSubject IntendedITI => #30
    SubscribeSubject TrialEnd => #31
    SubscribeSubject TrialStart => #32
    #31, #32 -> Zip
    -> Subtract => #34
    SubscribeSubject TrialEnd => #35
    SubscribeSubject TrialStart => #36
    SubscribeSubject WaveformR => #37
    SubscribeSubject WaveformL => #38
    SubscribeSubject RightAmp => #39
    SubscribeSubject LeftAmp => #40
    SubscribeSubject Bias => #41
    SubscribeSubject ILD => #42
    SubscribeSubject ABL => #43
    SubscribeSubject TrainingLevel => #44
    SubscribeSubject TrialsPerBlock => #45
    SubscribeSubject Block => #46
    SubscribeSubject Trial => #47
    SubscribeSubject SessionType => #48
    SubscribeSubject Session => #49
    SubscribeSubject Animal
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #51
      Expression: Convert.ToDouble(it)
    #49, #51 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #53
      Expression: Convert.ToDouble(it)
    #48, #53 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #55
      Expression: Convert.ToDouble(it)
    #47, #55 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #57
      Expression: Convert.ToDouble(it)
    #46, #57 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #59
      Expression: Convert.ToDouble(it)
    #45, #59 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #61
      Expression: Convert.ToDouble(it)
    #44, #61 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #63
      Expression: Convert.ToDouble(it)
    #43, #63 -> SubscribeWhen => #64
    #42, #64 -> SubscribeWhen => #65
    #41, #65 -> SubscribeWhen => #66
    #40, #66 -> SubscribeWhen => #67
    #39, #67 -> SubscribeWhen => #68
    #38, #68 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #70
      Expression: Convert.ToDouble(it)
    #37, #70 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #72
      Expression: Convert.ToDouble(it)
    #36, #72 -> SubscribeWhen => #73
    #35, #73 -> SubscribeWhen => #74
    #34, #74 -> SubscribeWhen => #75
    #30, #75 -> SubscribeWhen => #76
    #29, #76 -> SubscribeWhen => #77
    #28, #77 -> SubscribeWhen => #78
    #27, #78 -> SubscribeWhen => #79
    #23, #79 -> SubscribeWhen => #80
    #22, #80 -> SubscribeWhen => #81
    #21, #81 -> SubscribeWhen => #82
    #20, #82 -> SubscribeWhen => #83
    #19, #83 -> SubscribeWhen => #84
    #18, #84 -> SubscribeWhen => #85
    #17, #85 -> SubscribeWhen => #86
    #16, #86 -> SubscribeWhen => #87
    #15, #87 -> SubscribeWhen => #88
    #14, #88 -> SubscribeWhen => #89
    #13, #89 -> SubscribeWhen => #90
    #12, #90 -> SubscribeWhen => #91
    #11, #91 -> SubscribeWhen => #92
    #10, #92 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #94
      Expression: Convert.ToDouble(it)
    #9, #94 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #96
      Expression: Convert.ToDouble(it)
    #8, #96 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #98
      Expression: Convert.ToDouble(it)
    #7, #98 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #100
      Expression: Convert.ToDouble(it)
    #6, #100 -> SubscribeWhen => #101
    #5, #101 -> SubscribeWhen => #102
    #4, #102 -> SubscribeWhen => #103
    #3, #103 -> SubscribeWhen => #104
    #2, #104 -> SubscribeWhen => #105
    #1, #105 -> SubscribeWhen => #106
    #0, #106 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #108
      Expression: Convert.ToDouble(it)
    #108, #106, #105, #104, #103, #102, #101, #100, #98, #96, #94, #92, #91, #90, #89, #88, #87, #86, #85, #84, #83, #82, #81, #80, #79, #78, #77, #76, #75, #74, #73, #72, #70, #68, #67, #66, #65, #64, #63, #61, #59, #57, #55, #53, #51 -> Merge => #109
    #108 -> Delay(DueTime=PT0.001S) => #110
    #109, #110 -> TakeUntil
    -> ToArray
    -> MulticastSubject CSV
    -> BooleanProperty(Value=false) => #114
    IntProperty(Value=8) => #115
    #114, #115 -> Zip
    -> WorkflowOutput
#5 -> Condition
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> Equal(Operand=BooleanProperty(Value=false))
    -> WorkflowOutput
-> Delay(DueTime=PT0.01S) => #25
#23, #25 -> Merge
-> Take(Count=1)
-> Repeat => #28
SubscribeSubject SessionDuration
-> PropertyMapping(DueTime)
-> Timer(DueTime=PT1H, Period=PT0S) => #31
#28, #31 -> SubscribeWhen => #32
#28, #32 -> TakeUntil
-> WorkflowOutput
